//This macro will do the following, listed in chronological order: 
//Set the channels into the correct display colors.
//Display the channels in the "Composite Projection Max" setting.
//Sets the measuring tool to a segmented line with a width of the desired amount of pixels.
//Runs the "Roi-group table" endogenous plugin.
//Opens the ROI Manager, the Brightness and Contrast Menu, then the Channels Tool.
//Leads you through measuring different cell types determined by the settings of the Roi-group table plugin.
//Sets ImageJ into the channel you wish to make measurements in and then measures your ROI's. 

//To comment out code, put a "//" at the start of every line you wish to exclude.  This also works for making comments. 
//ImageJ will ignore any commented code when running the macro.

// (B) Sets channels into the correct colors.  
//In the "Stack.setChannel(n)" command, "n" should be replaced with the number of the channel you are trying to change.  You must use a numerical value or else this will not work.
//In the "run(color) command, "color" should be replaced with the color you are setting the channel to.  You must spell the channel exactly as it is shown in the Channels tool.
run("Channels Tool...");
Stack.setChannel(1);
run("Blue");
Stack.setChannel(2);
run("Grays"); 
Stack.setChannel(3);
run("Green");
Stack.setChannel(4);
run("Magenta");

//(C) This puts the channels into the "Composite Projection Max" mode. If using a different channel display mode, substitute this code.  
//For substitutions, the macro recorder is recommended.  Record yourself putting it into the appropriate display mode, then comment out this code and add the new code. 
Property.set("CompositeProjection", "Max");
Stack.setDisplayMode("composite");

// (D) (E) This allows you to measure with a segmented line.  
//The line width is set using the "line = n" command.  To change the line width, substitute "n" for the desired width of your line in pixels.
//The line width is currently set to 3 pixels, as indicated by "line = 3".  
//To change the type of line you are tracing (i.e. segmented, non-segmented, etc.) you will need to change the third line.  
//The third line has the format "setTool("line type").  Right now, the "line type" is set to "polyline" to indicate a segmented line is desired.  
//Record macro to find out the ImageJ name of the line type you are trying to set.  
//Once you know the name of the new line type, substitute the "line type" for the ImageJ name of your new line type.
setTool("line");
run("Line Width...", "line=3");
setTool("polyline");

// (F) This runs the "Roi-group table" endogenous plugin.
beep();
waitForUser("The ROI Manager is about to appear.  Click 'Import From File' then select group name settings.  Click 'Ok' to complete settings.")
run("Roi-group Table");

// (G) Opens ROI Manager
run("ROI Manager...");

// (G) Opens brightness and contrast adjuster
run("Brightness/Contrast...");

// (G) Opens Channels Tool
run("Channels Tool...");

// (H) This manually takes you through every cell type you are tracing.  
//As you advance through each dialog box,  this macro will change the group it assigns each measurement to .
//The general structure of this block is 2 lines that repeat for each group:
//run("Roi Defaults...", "color = red stroke = 0 group = n");
//waitForUser ("Leave dialog open until you finish tracing (name of group); Click 'OK' only when ready to move to next cell type");
//The first line sets the measurements to be recorded to the appropriate group set by the "Roi-group table" plugin.
//To change the group being measured, substitute "n" for the number of the group.
//Group numbers can be found by opening the plugin under the Edit > Options menu.
//The second line displays a dialog that tells you which group to trace. 
//To change the message, change the group name in (name of group), excluding the parentheses.
//You can say anything within the quotes of the second line, just remember to use single quotations/apostrophes instead of regular quotation marks.
//So use ' not "
run("Roi Defaults...", "color=red stroke=0 group=1");
waitForUser("Leave dialog open until you finish tracing Reference Intensities; Click 'OK' only when ready to move to next cell type");
run("Roi Defaults...", "color=red stroke=0 group=2");
waitForUser("Leave dialog open until you finish tracing Background Intensities; Click 'OK' only when ready to move to next cell type");
run("Roi Defaults...", "color=red stroke=0 group=3");
waitForUser("Leave dialog open until you finish tracing GSC's; Click 'OK' only when ready to move to next cell type");
run("Roi Defaults...", "color=red stroke=0 group=4");
waitForUser("Leave dialog open until you finish tracing Phase 1 Gb's; Click 'OK' only when ready to move to next cell type");
run("Roi Defaults...", "color=red stroke=0 group=5");
waitForUser("Leave dialog open until you finish tracing Phase 2 Gb's; Click 'OK' only when ready to move to next cell type");
run("Roi Defaults...", "color=red stroke=0 group=6");
waitForUser("Leave dialog open until you finish tracing Released Gb's; Click 'OK' only when ready to move to next cell type");
run("Roi Defaults...", "color=red stroke=0 group=7");
waitForUser("Leave dialog open until you finish tracing 2 CC's; Click 'OK' only when ready to move to next cell type");
run("Roi Defaults...", "color=red stroke=0 group=8");
waitForUser("Leave dialog open until you finish tracing 4-8 CC's; Click 'OK' only when ready to move to next cell type");

// (I) This sets ImageJ into the channel you wish to measure then takes measurements.
//To change the channel you wish to measure, substitute the "n" in "Stack.setChannel(n) for the number of the appropriate channel.
Stack.setChannel(4);
roiManager("Measure");
